<?xml version="1.0" encoding="UTF-8"?>
<s12:Envelope
        xmlns:s12="http://www.w3.org/2003/05/soap-envelope"
        xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant"
        xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message"
        xmlns:wsa="http://www.w3.org/2005/08/addressing">
    <s12:Header>
        <wsa:Action>http://standards.ieee.org/downloads/11073/11073-20701-2018/GetService/GetMdibResponse</wsa:Action>
        <wsa:MessageID><!-- ... --></wsa:MessageID>
        <wsa:RelatesTo><!-- ... --></wsa:RelatesTo>
    </s12:Header>
    <s12:Body>
        <msg:GetMdibResponse MdibVersion="..." SequenceId="..." InstanceId="...">
            <msg:Mdib MdibVersion="..." SequenceId="..." InstanceId="...">
                <pm:MdDescription DescriptionVersion="...">
                </pm:MdDescription>
                <pm:MdState StateVersion="...">
                </pm:MdState>
            </msg:Mdib>
        </msg:GetMdibResponse>
    </s12:Body>
</s12:Envelope>