<?xml version="1.0" encoding="UTF-8"?>
<msg:GetMdibResponse
        SequenceId="urn:uuid:09578906-7efd-43a7-8344-8bf37b674524"
        xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension"
        xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant"
        xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message"
        xmlns:sdpi="urn:oid:1.3.6.1.4.1.19376.1.6.2.10.1.1.1">
    <msg:Mdib SequenceId="urn:uuid:09578906-7efd-43a7-8344-8bf37b674524">
        <pm:MdDescription>
            <pm:Mds Handle="mds0">
                <ext:Extension>
                    <sdpi:EquipmentIdentifier>urn:uuid:9c057bb4-8d83-4fc1-9ad1-832ad543e2b2</sdpi:EquipmentIdentifier>
                </ext:Extension>
                <pm:Vmd Handle="vmd0">
                    <ext:Extension>
                        <sdpi:EquipmentIdentifier>urn:uuid:84051cdb-5353-47af-a916-b1f007e08ed8</sdpi:EquipmentIdentifier>
                    </ext:Extension>
                    <!-- containment subtree elements -->
                </pm:Vmd>
                <!-- other containment subtree elements -->
            </pm:Mds>
        </pm:MdDescription>
        <pm:MdState StateVersion="10">
            <!-- states -->
        </pm:MdState>
    </msg:Mdib>
</msg:GetMdibResponse>


