<?xml version="1.0" encoding="UTF-8"?>
<msg:GetMdibResponse
        SequenceId="urn:uuid:09578906-7efd-43a7-8344-8bf37b674524"
        xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension"
        xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant"
        xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message"
        xmlns:sdpi="urn:oid:1.3.6.1.4.1.19376.1.6.2.10.1.1.1">
    <msg:Mdib SequenceId="urn:uuid:09578906-7efd-43a7-8344-8bf37b674524">
        <pm:MdDescription>
            <pm:Mds Handle="mds0">
                <ext:Extension>
                    <sdpi:CodedAttributes>
                        <sdpi:CodedStringAttribute>
                            <sdpi:MdcAttribute Code="67886" SymbolicCodeName="MDC_ATTR_ID_SOFT"/>
                            <sdpi:Value>PatMon03</sdpi:Value>
                        </sdpi:CodedStringAttribute>
                    </sdpi:CodedAttributes>
                </ext:Extension>
                <!-- containment subtree -->
            </pm:Mds>
        </pm:MdDescription>
        <pm:MdState>
            <!-- states -->
        </pm:MdState>
    </msg:Mdib>
</msg:GetMdibResponse>