<?xml version="1.0" encoding="UTF-8"?>
<msg:GetMdibResponse
        SequenceId="urn:uuid:09578906-7efd-43a7-8344-8bf37b674524"
        xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension"
        xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant"
        xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message"
        xmlns:sdpi="urn:oid:1.3.6.1.4.1.19376.1.6.2.10.1.1.1"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
    <msg:Mdib SequenceId="urn:uuid:09578906-7efd-43a7-8344-8bf37b674524">
        <pm:MdDescription>
            <pm:Mds Handle="mds0">
                <pm:SystemContext Handle="system_context">
                    <pm:PatientContext Handle="patient_context"/>
                </pm:SystemContext>
                <!-- containment subtree -->
            </pm:Mds>
        </pm:MdDescription>
        <pm:MdState StateVersion="10">
            <pm:State xsi:type="pm:PatientContextState" ContextAssociation="Pre" Handle="patient_context_state" StateVersion="8" DescriptorHandle="patient_context">
                <pm:Identification Root="http://www.sdpi.org" Extension="SamplePatientId123"/>
                <pm:CoreData>
                    <ext:Extension>
                        <sdpi:Gender>Other</sdpi:Gender>
                    </ext:Extension>
                    <pm:Givenname>John</pm:Givenname>
                    <pm:Middlename>Donnelly</pm:Middlename>
                    <pm:Familyname>Doe</pm:Familyname>
                    <pm:Sex>M</pm:Sex>
                </pm:CoreData>
            </pm:State>
            <!-- states -->
        </pm:MdState>
    </msg:Mdib>
</msg:GetMdibResponse>


